PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'gender': "['female', 'male', 'other']", 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.1.3
  Window size (pixels) = [1280, 720]
  expName = PVT-UK
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Dear participants,


        You will see a fixation cross in the middle of the screen. After a few seconds the fixation cross will disappear and a counter will start. Your task is to press the SPACE key as fast as possible to stop the counter. You will get feedback on your reaction time.
        Please press the SPACE bar to start.
    KeyboardComponent IstructResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    CodeComponent code_ISI
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
            overall_timer = new_util.Clock

        import java.util.Random;

        min = 2

        max = 10

        if randFloat(float(min), float(max)):
            Random_rand = new_Random()
            randDuration = rand.nextFloat() * (max - min) + min


        thisExp.addData('stimulus_interval', randDuration)
    TextComponent text_3
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $mTurk
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  Routine feedback
    CodeComponent code_feedback
      Code Type = JS
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      Begin JS Experiment:
        msg = '';
      Begin JS Routine:
        // msg = (Response.rt * 1000);
        // msg_ms = msg;

        if (Response.rt >= 2) {
            msg = "Please pay attention!";
        } else {
            msg = (Response.rt * 1000);
        }
    TextComponent text_feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine Thank
    TextComponent text_End
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Thank you for completing this task!

        Please move on to the next one.
  Routine check
    CodeComponent code_Check
      Code Type = Auto->JS
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      Each Frame:
        sw = overall_timer.getTime()

        print(sw)

        # experiment ends after 10  mins

        if sw >= 600:
            continueRoutine = False
            trials.finished = True
  Routine trial
    CodeComponent code_trial
      Code Type = Auto->JS
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      Begin Experiment:
        myClock = new_util.Clock()

        # in PY core.Clock() keep track
        # of the exp time.
        # java uses the code line above
      Begin Routine:
        myClock.reset();
      Each Frame:
        time = myClock.getTime()
      End Routine:
        msg = Response.rt #get rt from keyboard
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $time
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    KeyboardComponent Response
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = CIao
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    KeyboardComponent Response_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine ISI
    Routine trial
    Routine feedback
    Routine check
  LoopTerminator trials
  Routine Thank
